PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = movement
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Both
      Before JS Experiment:
        // Global variables for animation
        var currentStripes = [];
        var rect1 = null;
        var rect2 = null;
        var top_mask = null;
        var bottom_mask = null;
        var direction = 1;
        var startTime = 0;
        var trialFinished = false;
        var x_position = 0;
        var start_x = 0;
        var rect_width = 0;
        var screen_width = 0;
        var animation_duration = 16.0;
      Begin Experiment:
        # Настройки движения
        animation_duration = 30.0

        def create_stripes(win, n_bars, contrast):
            screen_width = win.size[0]
            screen_height = win.size[1]
            stripe_width = screen_width / n_bars

            if contrast == 'high':
                color_even = 'black'
                color_odd = [1.0, 1.0, 1.0]
            else:
                color_even = [0.2, 0.2, 0.2]
                color_odd = [0.4, 0.4, 0.4]

            stripes = []
            for i in range(n_bars):
                x_pos = -screen_width/2 + stripe_width/2 + i * stripe_width
                color = color_even if i % 2 == 0 else color_odd

                stripe = visual.Rect(
                    win,
                    width=stripe_width,
                    height=screen_height,
                    pos=(x_pos, 0),
                    fillColor=color,
                    lineColor=color,
                    units='pix',
                    autoDraw=False
                )
                stripes.append(stripe)

            return stripes

        def create_rectangles(win, color_condition):
            screen_width = win.size[0]
            screen_height = win.size[1]

            rect_width = screen_width / 25
            rect_height = screen_height / 40
            distance_between = rect_height * 2.5
            total_height = rect_height * 2 + distance_between

            start_x = -screen_width/2 + rect_width/2
            start_y_top = total_height/2 - rect_height/2
            start_y_bottom = -total_height/2 + rect_height/2

            if color_condition == 'yellow-blue':
                color1 = 'lightyellow'
                color2 = 'darkblue'
            else:
                color1 = 'white'
                color2 = 'black'

            rect1 = visual.Rect(
                win,
                width=rect_width,
                height=rect_height,
                pos=(start_x, start_y_top),
                fillColor=color1,
                lineColor=color1,
                units='pix',
                autoDraw=False
            )

            rect2 = visual.Rect(
                win,
                width=rect_width,
                height=rect_height,
                pos=(start_x, start_y_bottom),
                fillColor=color2,
                lineColor=color2,
                units='pix',
                autoDraw=False
            )

            return rect1, rect2, start_x, rect_width, screen_width

        # Функция для создания белых масок
        def create_white_masks(win):
            screen_width = win.size[0]
            screen_height = win.size[1]

            # Высота каждой маски (1/3 экрана)
            mask_height = screen_height / 3

            # Верхняя маска
            top_mask = visual.Rect(
                win,
                width=screen_width,
                height=mask_height,
                pos=(0, screen_height/2 - mask_height/2),  # центр верхней трети
                fillColor='white',
                lineColor='white',
                units='pix',
                autoDraw=False
            )

            # Нижняя маска
            bottom_mask = visual.Rect(
                win,
                width=screen_width,
                height=mask_height,
                pos=(0, -screen_height/2 + mask_height/2),  # центр нижней трети
                fillColor='white',
                lineColor='white',
                units='pix',
                autoDraw=False
            )

            return top_mask, bottom_mask
      Begin JS Experiment:
        animation_duration = 30.0;
        create_stripes = function(win, n_bars, contrast) {
            var color, color_even, color_odd, screen_height, screen_width, stripe, stripe_width, stripes, x_pos;
            screen_width = psychoJS.window.size[0];
            screen_height = psychoJS.window.size[1];
            stripe_width = (screen_width / n_bars);
            if ((contrast === "high")) {
                color_even = "black";
                color_odd = [1.0, 1.0, 1.0];
            } else {
                color_even = [0.2, 0.2, 0.2];
                color_odd = [0.4, 0.4, 0.4];
            }
            stripes = [];
            for (var i, _pj_c = 0, _pj_a = util.range(n_bars), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                x_pos = ((((- screen_width) / 2) + (stripe_width / 2)) + (i * stripe_width));
                color = (((i % 2) === 0) ? color_even : color_odd);
                stripe = new visual.Rect(psychoJS.window, {"width": stripe_width, "height": screen_height, "pos": [x_pos, 0], "fillColor": color, "lineColor": color, "units": "pix", "autoDraw": false});
                stripes.push(stripe);
            }
            return stripes;
        }
        function create_rectangles(win, color_condition) {
            var color1, color2, distance_between, rect1, rect2, rect_height, rect_width, screen_height, screen_width, start_x, start_y_bottom, start_y_top, total_height;
            screen_width = psychoJS.window.size[0];
            screen_height = psychoJS.window.size[1];
            rect_width = (screen_width / 25);
            rect_height = (screen_height / 40);
            distance_between = (rect_height * 2.5);
            total_height = ((rect_height * 2) + distance_between);
            start_x = (((- screen_width) / 2) + (rect_width / 2));
            start_y_top = ((total_height / 2) - (rect_height / 2));
            start_y_bottom = (((- total_height) / 2) + (rect_height / 2));
            if ((color_condition === "yellow-blue")) {
                color1 = "lightyellow";
                color2 = "darkblue";
            } else {
                color1 = "white";
                color2 = "black";
            }
            rect1 = new visual.Rect(psychoJS.window, {"width": rect_width, "height": rect_height, "pos": [start_x, start_y_top], "fillColor": color1, "lineColor": color1, "units": "pix", "autoDraw": false});
            rect2 = new visual.Rect(psychoJS.window, {"width": rect_width, "height": rect_height, "pos": [start_x, start_y_bottom], "fillColor": color2, "lineColor": color2, "units": "pix", "autoDraw": false});
            return [rect1, rect2, start_x, rect_width, screen_width];
        }
        function create_white_masks(win) {
            var bottom_mask, mask_height, screen_height, screen_width, top_mask;
            screen_width = psychoJS.window.size[0];
            screen_height = psychoJS.window.size[1];
            mask_height = (screen_height / 3);
            top_mask = new visual.Rect(psychoJS.window, {"width": screen_width, "height": mask_height, "pos": [0, ((screen_height / 2) - (mask_height / 2))], "fillColor": "white", "lineColor": "white", "units": "pix", "autoDraw": false});
            bottom_mask = new visual.Rect(psychoJS.window, {"width": screen_width, "height": mask_height, "pos": [0, (((- screen_height) / 2) + (mask_height / 2))], "fillColor": "white", "lineColor": "white", "units": "pix", "autoDraw": false});
            return [top_mask, bottom_mask];
        }
      Begin JS Routine:
        current_stripes = create_stripes(psychoJS.window, 100, contrast);
        [rect1, rect2, start_x, rect_width, screen_width] = create_rectangles(psychoJS.window, color);
        direction = 1;
        start_time = globalClock.getTime();
        trial_finished = false;
        x_position = start_x;
        [top_mask, bottom_mask] = create_white_masks(psychoJS.window);
        rect1.pos = [x_position, rect1.pos[1]];
        rect2.pos = [x_position, rect2.pos[1]];
      Begin Routine:
        # Создаем объекты для текущей пробы
        current_stripes = create_stripes(win, 200, contrast)
        rect1, rect2, start_x, rect_width, screen_width = create_rectangles(win, color)

        # Инициализируем параметры анимации для ЭТОЙ пробы
        direction = 1
        start_time = globalClock.getTime()
        trial_finished = False
        x_position = start_x
        # Создаем белые маски
        top_mask, bottom_mask = create_white_masks(win)
        # Обновляем позиции прямоугольников
        rect1.pos = (x_position, rect1.pos[1])
        rect2.pos = (x_position, rect2.pos[1])
      Each Frame:
        if not trial_finished:
            # Текущее время с начала пробы
            current_time = globalClock.getTime() - start_time

            # Рассчитываем прогресс анимации
            if direction == 1:  # движение вправо
                progress = min(current_time / animation_duration, 1.0)
                x_position = start_x + (screen_width - rect_width) * progress

                # Если дошли до правого края, меняем направление
                if progress >= 1.0:
                    direction = -1
                    start_time = globalClock.getTime()  # сбрасываем таймер для движения влево

            else:  # движение влево
                progress = min(current_time / animation_duration, 1.0)
                x_position = start_x + (screen_width - rect_width) * (1 - progress)

                # Если вернулись к левому краю, завершаем пробу
                if progress >= 1.0:
                    trial_finished = True

            # Обновляем позиции прямоугольников
            rect1.pos = (x_position, rect1.pos[1])
            rect2.pos = (x_position, rect2.pos[1])

            # Отрисовка
            win.color = [0.3, 0.3, 0.3]
            for stripe in current_stripes:
                stripe.draw()
            rect1.draw()
            rect2.draw()
            # 3. В САМОМ КОНЦЕ рисуем белые маски (чтобы они перекрывали все)
            top_mask.draw()
            bottom_mask.draw()
            # Проверка клавиш для досрочного завершения
            keys = event.getKeys(keyList=['a', 'l', 'escape'])
            if 'escape' in keys:
                thisExp.finish()
            elif 'a' in keys or 'l' in keys:
                trial_finished = True

        # Если проба завершена, переходим к следующей
        if trial_finished:
            continueRoutine = False
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        if ((! trial_finished)) {
            current_time = (globalClock.getTime() - start_time);
            if ((direction === 1)) {
                progress = Math.min((current_time / animation_duration), 1.0);
                x_position = (start_x + ((screen_width - rect_width) * progress));
                if ((progress >= 1.0)) {
                    direction = (- 1);
                    start_time = globalClock.getTime();
                }
            } else {
                progress = Math.min((current_time / animation_duration), 1.0);
                x_position = (start_x + ((screen_width - rect_width) * (1 - progress)));
                if ((progress >= 1.0)) {
                    trial_finished = true;
                }
            }
            rect1.pos = [x_position, rect1.pos[1]];
            rect2.pos = [x_position, rect2.pos[1]];
            psychoJS.window.color = [0.3, 0.3, 0.3];
            for (var stripe, _pj_c = 0, _pj_a = current_stripes, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                stripe = _pj_a[_pj_c];
                stripe.draw();
            }
            rect1.draw();
            rect2.draw();
            top_mask.draw();
            bottom_mask.draw();
            keys = psychoJS.eventManager.getKeys({"keyList": ["a", "l", "escape"]});
            if (_pj.in_es6("escape", keys)) {
                psychoJS.experiment.finish();
            } else {
                if ((_pj.in_es6("a", keys) || _pj.in_es6("l", keys))) {
                    trial_finished = true;
                }
            }
        }
        if (trial_finished) {
            continueRoutine = false;
        }
      End JS Routine:
        psychoJS.experiment.addData("contrast", contrast);
        psychoJS.experiment.addData("color", color);
        psychoJS.experiment.addData("bars", bars);
        psychoJS.experiment.addData("trial_duration", (globalClock.getTime() - start_time));
        psychoJS.experiment.addData("completed_full_cycle", ((direction === (- 1)) && trial_finished));
      End Routine:
        # Сохраняем данные
        thisExp.addData('contrast', contrast)
        thisExp.addData('color', color)
        thisExp.addData('bars', bars)
        thisExp.addData('trial_duration', globalClock.getTime() - start_time)
        thisExp.addData('completed_full_cycle', direction == -1 and trial_finished)
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr
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    TextComponent hello_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        В данном эксперименте вам необходимо сообщать видите ли вы иллюзию "шагания".
        На экране будут перемещаться 2 прямоугольника. Если вам кажется, что прямоугольники "шагают", нажмите клавишу "L"
        Если иллюзия не возникает, нажите клавишу "A"

        Если вы готовы начать, нажмите пробел
    KeyboardComponent hello_key_space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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  Routine fix
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    TextComponent fix_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = +
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conds.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('contrast', 'high'), ('color', 'yellow-blue'), ('bars', 34)]),
      OrderedDict([('contrast', 'high'), ('color', 'yellow-blue'), ('bars', 64)]),
      OrderedDict([('contrast', 'high'), ('color', 'yellow-blue'), ('bars', 124)]),
      OrderedDict([('contrast', 'low'), ('color', 'yellow-blue'), ('bars', 34)]),
      OrderedDict([('contrast', 'low'), ('color', 'yellow-blue'), ('bars', 64)]),
      OrderedDict([('contrast', 'low'), ('color', 'yellow-blue'), ('bars', 124)]),
      OrderedDict([('contrast', 'high'), ('color', 'black-black'), ('bars', 34)]),
      OrderedDict([('contrast', 'high'), ('color', 'black-black'), ('bars', 64)]),
      OrderedDict([('contrast', 'high'), ('color', 'black-black'), ('bars', 124)]),
      OrderedDict([('contrast', 'low'), ('color', 'black-black'), ('bars', 34)]),
      OrderedDict([('contrast', 'low'), ('color', 'black-black'), ('bars', 64)]),
      OrderedDict([('contrast', 'low'), ('color', 'black-black'), ('bars', 124)])]
    Routine fix
    Routine trial
  LoopTerminator trials
  Routine end
